---
API: 2
OpenSesame: 3.0.7
Platform: posix
---
set width 1680
set uniform_coordinates no
set transparent_variables no
set title "mousetracking Eriksen flanker task"
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sampler_backend legacy
set mouse_backend legacy
set keyboard_backend legacy
set height 1050
set foreground "#000000"
set font_size 30
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/tom/github/MT_flanker/exp2/procedure"
set description "A simple template for the mouse-tracking paradigm"
set custom_cursor no
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background "#ffffff"

define loop block_1
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item exp_sequence
	set description "Repeatedly runs another item"
	set cycles 100
	set column_order "stimulus;congruity;targetSide"
	set break_if never
	setcycle 0 stimulus "leftCongruent.jpg"
	setcycle 0 congruity "congruent"
	setcycle 0 targetSide "left"
	setcycle 1 stimulus "rightIncongruent.jpg"
	setcycle 1 congruity "incongruent"
	setcycle 1 targetSide "right"
	setcycle 2 stimulus "rightCongruent.jpg"
	setcycle 2 congruity "congruent"
	setcycle 2 targetSide "right"
	setcycle 3 stimulus "leftIncongruent.jpg"
	setcycle 3 congruity "incongruent"
	setcycle 3 targetSide "left"
	setcycle 4 stimulus "leftCongruent.jpg"
	setcycle 4 congruity "congruent"
	setcycle 4 targetSide "left"
	setcycle 5 stimulus "rightIncongruent.jpg"
	setcycle 5 congruity "incongruent"
	setcycle 5 targetSide "right"
	setcycle 6 stimulus "rightCongruent.jpg"
	setcycle 6 congruity "congruent"
	setcycle 6 targetSide "right"
	setcycle 7 stimulus "leftIncongruent.jpg"
	setcycle 7 congruity "incongruent"
	setcycle 7 targetSide "left"
	setcycle 8 stimulus "leftCongruent.jpg"
	setcycle 8 congruity "congruent"
	setcycle 8 targetSide "left"
	setcycle 9 stimulus "rightIncongruent.jpg"
	setcycle 9 congruity "incongruent"
	setcycle 9 targetSide "right"
	setcycle 10 stimulus "rightCongruent.jpg"
	setcycle 10 congruity "congruent"
	setcycle 10 targetSide "right"
	setcycle 11 stimulus "leftIncongruent.jpg"
	setcycle 11 congruity "incongruent"
	setcycle 11 targetSide "left"
	setcycle 12 stimulus "leftCongruent.jpg"
	setcycle 12 congruity "congruent"
	setcycle 12 targetSide "left"
	setcycle 13 stimulus "rightIncongruent.jpg"
	setcycle 13 congruity "incongruent"
	setcycle 13 targetSide "right"
	setcycle 14 stimulus "rightCongruent.jpg"
	setcycle 14 congruity "congruent"
	setcycle 14 targetSide "right"
	setcycle 15 stimulus "leftIncongruent.jpg"
	setcycle 15 congruity "incongruent"
	setcycle 15 targetSide "left"
	setcycle 16 stimulus "leftCongruent.jpg"
	setcycle 16 congruity "congruent"
	setcycle 16 targetSide "left"
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	run exp_sequence

define loop block_2
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item exp_sequence_1
	set description "Repeatedly runs another item"
	set cycles 100
	set column_order "stimulus;congruity;targetSide"
	set break_if never
	setcycle 0 stimulus "leftCongruent.jpg"
	setcycle 0 congruity "congruent"
	setcycle 0 targetSide "left"
	setcycle 1 stimulus "rightIncongruent.jpg"
	setcycle 1 congruity "incongruent"
	setcycle 1 targetSide "right"
	setcycle 2 stimulus "rightCongruent.jpg"
	setcycle 2 congruity "congruent"
	setcycle 2 targetSide "right"
	setcycle 3 stimulus "leftIncongruent.jpg"
	setcycle 3 congruity "incongruent"
	setcycle 3 targetSide "left"
	setcycle 4 stimulus "leftCongruent.jpg"
	setcycle 4 congruity "congruent"
	setcycle 4 targetSide "left"
	setcycle 5 stimulus "rightIncongruent.jpg"
	setcycle 5 congruity "incongruent"
	setcycle 5 targetSide "right"
	setcycle 6 stimulus "rightCongruent.jpg"
	setcycle 6 congruity "congruent"
	setcycle 6 targetSide "right"
	setcycle 7 stimulus "leftIncongruent.jpg"
	setcycle 7 congruity "incongruent"
	setcycle 7 targetSide "left"
	setcycle 8 stimulus "leftCongruent.jpg"
	setcycle 8 congruity "congruent"
	setcycle 8 targetSide "left"
	setcycle 9 stimulus "rightIncongruent.jpg"
	setcycle 9 congruity "incongruent"
	setcycle 9 targetSide "right"
	setcycle 10 stimulus "rightCongruent.jpg"
	setcycle 10 congruity "congruent"
	setcycle 10 targetSide "right"
	setcycle 11 stimulus "leftIncongruent.jpg"
	setcycle 11 congruity "incongruent"
	setcycle 11 targetSide "left"
	setcycle 12 stimulus "leftCongruent.jpg"
	setcycle 12 congruity "congruent"
	setcycle 12 targetSide "left"
	setcycle 13 stimulus "rightIncongruent.jpg"
	setcycle 13 congruity "incongruent"
	setcycle 13 targetSide "right"
	setcycle 14 stimulus "rightCongruent.jpg"
	setcycle 14 congruity "congruent"
	setcycle 14 targetSide "right"
	setcycle 15 stimulus "leftIncongruent.jpg"
	setcycle 15 congruity "incongruent"
	setcycle 15 targetSide "left"
	setcycle 16 stimulus "leftCongruent.jpg"
	setcycle 16 congruity "congruent"
	setcycle 16 targetSide "left"
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	run exp_sequence_1

define loop block_3
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item exp_sequence_1_1
	set description "Repeatedly runs another item"
	set cycles 100
	set column_order "stimulus;congruity;targetSide"
	set break_if never
	setcycle 0 stimulus "leftCongruent.jpg"
	setcycle 0 congruity "congruent"
	setcycle 0 targetSide "left"
	setcycle 1 stimulus "rightIncongruent.jpg"
	setcycle 1 congruity "incongruent"
	setcycle 1 targetSide "right"
	setcycle 2 stimulus "rightCongruent.jpg"
	setcycle 2 congruity "congruent"
	setcycle 2 targetSide "right"
	setcycle 3 stimulus "leftIncongruent.jpg"
	setcycle 3 congruity "incongruent"
	setcycle 3 targetSide "left"
	setcycle 4 stimulus "leftCongruent.jpg"
	setcycle 4 congruity "congruent"
	setcycle 4 targetSide "left"
	setcycle 5 stimulus "rightIncongruent.jpg"
	setcycle 5 congruity "incongruent"
	setcycle 5 targetSide "right"
	setcycle 6 stimulus "rightCongruent.jpg"
	setcycle 6 congruity "congruent"
	setcycle 6 targetSide "right"
	setcycle 7 stimulus "leftIncongruent.jpg"
	setcycle 7 congruity "incongruent"
	setcycle 7 targetSide "left"
	setcycle 8 stimulus "leftCongruent.jpg"
	setcycle 8 congruity "congruent"
	setcycle 8 targetSide "left"
	setcycle 9 stimulus "rightIncongruent.jpg"
	setcycle 9 congruity "incongruent"
	setcycle 9 targetSide "right"
	setcycle 10 stimulus "rightCongruent.jpg"
	setcycle 10 congruity "congruent"
	setcycle 10 targetSide "right"
	setcycle 11 stimulus "leftIncongruent.jpg"
	setcycle 11 congruity "incongruent"
	setcycle 11 targetSide "left"
	setcycle 12 stimulus "leftCongruent.jpg"
	setcycle 12 congruity "congruent"
	setcycle 12 targetSide "left"
	setcycle 13 stimulus "rightIncongruent.jpg"
	setcycle 13 congruity "incongruent"
	setcycle 13 targetSide "right"
	setcycle 14 stimulus "rightCongruent.jpg"
	setcycle 14 congruity "congruent"
	setcycle 14 targetSide "right"
	setcycle 15 stimulus "leftIncongruent.jpg"
	setcycle 15 congruity "incongruent"
	setcycle 15 targetSide "left"
	setcycle 16 stimulus "leftCongruent.jpg"
	setcycle 16 congruity "congruent"
	setcycle 16 targetSide "left"
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	run exp_sequence_1_1

define loop block_4
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item exp_sequence_1_1_1
	set description "Repeatedly runs another item"
	set cycles 100
	set column_order "stimulus;congruity;targetSide"
	set break_if never
	setcycle 0 stimulus "leftCongruent.jpg"
	setcycle 0 congruity "congruent"
	setcycle 0 targetSide "left"
	setcycle 1 stimulus "rightIncongruent.jpg"
	setcycle 1 congruity "incongruent"
	setcycle 1 targetSide "right"
	setcycle 2 stimulus "rightCongruent.jpg"
	setcycle 2 congruity "congruent"
	setcycle 2 targetSide "right"
	setcycle 3 stimulus "leftIncongruent.jpg"
	setcycle 3 congruity "incongruent"
	setcycle 3 targetSide "left"
	setcycle 4 stimulus "leftCongruent.jpg"
	setcycle 4 congruity "congruent"
	setcycle 4 targetSide "left"
	setcycle 5 stimulus "rightIncongruent.jpg"
	setcycle 5 congruity "incongruent"
	setcycle 5 targetSide "right"
	setcycle 6 stimulus "rightCongruent.jpg"
	setcycle 6 congruity "congruent"
	setcycle 6 targetSide "right"
	setcycle 7 stimulus "leftIncongruent.jpg"
	setcycle 7 congruity "incongruent"
	setcycle 7 targetSide "left"
	setcycle 8 stimulus "leftCongruent.jpg"
	setcycle 8 congruity "congruent"
	setcycle 8 targetSide "left"
	setcycle 9 stimulus "rightIncongruent.jpg"
	setcycle 9 congruity "incongruent"
	setcycle 9 targetSide "right"
	setcycle 10 stimulus "rightCongruent.jpg"
	setcycle 10 congruity "congruent"
	setcycle 10 targetSide "right"
	setcycle 11 stimulus "leftIncongruent.jpg"
	setcycle 11 congruity "incongruent"
	setcycle 11 targetSide "left"
	setcycle 12 stimulus "leftCongruent.jpg"
	setcycle 12 congruity "congruent"
	setcycle 12 targetSide "left"
	setcycle 13 stimulus "rightIncongruent.jpg"
	setcycle 13 congruity "incongruent"
	setcycle 13 targetSide "right"
	setcycle 14 stimulus "rightCongruent.jpg"
	setcycle 14 congruity "congruent"
	setcycle 14 targetSide "right"
	setcycle 15 stimulus "leftIncongruent.jpg"
	setcycle 15 congruity "incongruent"
	setcycle 15 targetSide "left"
	setcycle 16 stimulus "leftCongruent.jpg"
	setcycle 16 congruity "congruent"
	setcycle 16 targetSide "left"
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	run exp_sequence_1_1_1

define sketchpad breakScreen
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You may now take a short break. <br>  Press the space bar when you are ready to proceed." x=32 y=-64 z_index=0

define sequence exp_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mousetracking_script_block1 always
	run logger always

define sequence exp_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mousetracking_script_block1_1 always
	run logger_1 always

define sequence exp_sequence_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mousetracking_script_block1_1_1 always
	run logger_1_1 always

define sequence exp_sequence_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mousetracking_script_block1_1_1_1 always
	run logger_1_1_1 always

define sequence exp_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mousetracking_script_block1_2 always

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run setup_script always
	run instruction1 always
	run instruction2 always
	run practiceBlock always
	run instruction3 always
	run block_1 always
	run breakScreen always
	run block_2 always
	run breakScreen always
	run block_3 always
	run breakScreen always
	run block_4 always
	run finish always

define sketchpad finish
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You are now finished with the experiment. <br>  Thank you for your participation!" x=32 y=-64 z_index=0

define sketchpad instruction1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="instructions1.jpg" scale=1.3 show_if=always x=0 y=0 z_index=0

define sketchpad instruction2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="instructions2.jpg" scale=1.3 show_if=always x=0 y=0 z_index=0

define sketchpad instruction3
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="instructions3.jpg" scale=1.3 show_if=always x=0 y=0 z_index=0

define logger logger
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log no
	log height
	log subject_nr
	log width
	log response
	log accuracy
	log rt
	log xTrajectory
	log yTrajectory
	log tTrajectory
	log stimulus
	log congruity
	log targetSide

define logger logger_1
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log no
	log height
	log subject_nr
	log width
	log response
	log accuracy
	log rt
	log xTrajectory
	log yTrajectory
	log tTrajectory
	log stimulus
	log congruity
	log targetSide

define logger logger_1_1
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log no
	log height
	log subject_nr
	log width
	log response
	log accuracy
	log rt
	log xTrajectory
	log yTrajectory
	log tTrajectory
	log stimulus
	log congruity
	log targetSide

define logger logger_1_1_1
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log no
	log height
	log subject_nr
	log width
	log response
	log accuracy
	log rt
	log xTrajectory
	log yTrajectory
	log tTrajectory
	log stimulus
	log congruity
	log targetSide

define inline_script mousetracking_script_block1
	set description "Executes Python code"
	___run__
	# Draw start Button and response buttons
	
	def response_buttons():
		my_canvas.rect(x=0,y=0,w=response_w,h=response_h,fill=True)  # left response button
		my_canvas.rect(x=2*mx-response_w,y=0,w=response_w,h=response_h,fill=True)  # right response button
		my_canvas.text("Left",x=0.5*response_w,y=0.5*response_h,color='white')
		my_canvas.text("Right",x=2*mx-0.5*response_w,y=0.5*response_h,color='white')
	
	def start_button():
		my_canvas.rect(x=mx-0.5*start_w,y=2*my-start_h,w=start_w,h=start_h,fill=True)  # start button
		my_canvas.text("Start",x=mx,y=2*my-0.5*start_h,color='white')
	
	my_canvas.clear()
	response_buttons()
	start_button()
	my_canvas.show()
	
	my_mouse.show_cursor(show=True)
	
	#Wait for click on start button
	while 1:
		button, position, timestamp = my_mouse.get_click()
		x, y = position
		if x > mx-0.5*start_w and x < mx+0.5*start_w and y > (2*my) - start_h:
			my_canvas.clear()
			break
	
	# Hide the mouse
	my_mouse.show_cursor(show=False)
	# Fixation
	tick = fixation_length / 3
	my_canvas.clear()
	response_buttons()
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.text('+')
	response_buttons()
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.clear()
	response_buttons()
	my_canvas.show()
	exp.sleep(tick)
	
	
	
	# Show the stimuli
	
	my_canvas.clear()
	my_canvas.image(exp.get_file('stimuli/{0}'.format(stimulus)),True)
	response_buttons()
	my_canvas.show()
	# Show the mouse, and move it to the starting point
	my_mouse.show_cursor(show=True)
	my_mouse.set_pos(pos=(mx, (2*my)-half_start_h))
	
	
	
	
	# The actual mouse tracking
	t0 = start = exp.time()
	t1 = t0 + sample_rate
	resp = 0
	timed_out = False
	slow_start = False
	while 1:
		position, timestamp = my_mouse.get_pos()
		if my_mouse.get_pressed()[0]: # A click
			if x < response_w and y < response_h:
				# Clicked response 1
				rt = timestamp - start
				resp = 1
				print 'response 1'
				break
			elif x > (2*mx) - response_w and y < response_h:
				# Clicked response 2
				rt = timestamp - start
				resp = 2
				print 'response 2'
				break
		if timestamp > t1:
			# It's time to record the mouse position
			t1 += sample_rate
			t = timestamp - start
			x, y = position
			xList.append(x)
			yList.append(y)
			tList.append(t)
			if t > max_response_time:
				# Out of time, record a null response.
				timed_out = True
				resp = -1
				rt = None
				print 'Timeout'
				break
	
	# Let's figure out if the response was correct
	if targetSide == 'left':
		correct_response = 1
	else:
		correct_response = 2
	accuracy = int(resp == correct_response)
	
	# show a message if RT > 1000 msec
	
	if (rt>1000):
		my_canvas.clear()
		response_buttons()
		my_canvas.text('Please make your response more quickly!',color="red")
		my_canvas.show()
		exp.sleep(1000)
	
	
	# Show a message if wrong answer (optional)
	if (accuracy == 0 and not timed_out):
		my_canvas.clear()
		response_buttons()
		my_canvas.text('X',color="red")
		my_canvas.show()
		exp.sleep(1000)
	
	# Show a message if the trial has timed out without a response
	if timed_out:
		my_canvas.clear()
		response_buttons()
		my_canvas.text(timeout_message)
		my_canvas.show()
		timed_out = False
		my_keyboard.get_key()
	
	# Figure out if the mouse had left the start button by max_init_time
	for i in range(len(yList)):
		y = yList[i]
		if y < ((2*my) - (2*half_start_h)):
			init_step = i # The sample where y left the button
			break
	init_time = tList[init_step] # 	The time of that sample
	slow_start = int(init_time > max_init_time)
	
	
	
	# Show a message if the trial has timed out without a response
	if (slow_start and not timed_out):
		my_canvas.clear()
		my_canvas.text(slow_start_message)
		my_canvas.rect(x=0,y=0,w=response_w,h=response_h,fill=True)  # left response button
		my_canvas.rect(x=2*mx-response_w,y=0,w=response_w,h=response_h,fill=True)  # right response button
		my_canvas.text("True",x=0.5*response_w,y=0.5*response_h,color='white')
		my_canvas.text("False",x=2*mx-0.5*response_w,y=0.5*response_h,color='white')
		my_canvas.show()
		timed_out = False
		my_keyboard.get_key()
	
	
	# Standard Logging (the probe and code variables are taken care of automatically)
	self.experiment.set("response", resp)
	self.experiment.set("accuracy", accuracy)
	self.experiment.set("rt", rt)
	self.experiment.set("xTrajectory", str(xList))
	self.experiment.set("yTrajectory", str(yList))
	self.experiment.set("tTrajectory", str(tList))
	#self.experiment.set("trialNumber", count_block1_sequence)
	__end__
	___prepare__
	# Constants
	max_response_time = 3000
	fixation_length = 900
	error_message_duration = 2000
	max_init_time = 800
	sample_rate = 14
	
	
	# Text
	timeout_message = "Too slow!\n\
	Try to respond more quickly.\n\
	Press any key to continue."
	slow_start_message = "\
	Please try to move the mouse as soon\n\
	as you see the target, even if you're not\n\
	sure of your response yet\n\
	Press any key to continue."
	error_message = "<span color='red'>X</span>"
	
	# Turn our OpenSesame variables into plain Python ones
	stimulus = exp.get('stimulus')
	congruity = exp.get('congruity')
	targetSide = exp.get('targetSide')
	
	
	# Some dimensions
	# Our start button is 80x80 pixels.
	# Change these values if using a different sized image.
	start_w=192
	start_h=80
	
	half_start_w = 40
	half_start_h = 40
	# Likewise for the response buttons
	response_w = 192
	response_h = 128
	# Get the size of the screen
	mx = my_canvas.xcenter()
	my = my_canvas.ycenter()
	
	# Some empty lists for recording mouse data
	xList, yList, tList = [], [], []
	__end__

define inline_script mousetracking_script_block1_1
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
	# Constants
	max_response_time = 3000
	fixation_length = 900
	error_message_duration = 2000
	max_init_time = 800
	sample_rate = 14
	
	
	# Text
	timeout_message = "Too slow!\n\
	Try to respond more quickly.\n\
	Press any key to continue."
	slow_start_message = "\
	Please try to move the mouse as soon\n\
	as you see the target, even if you're not\n\
	sure of your response yet\n\
	Press any key to continue."
	error_message = "<span color='red'>X</span>"
	
	# Turn our OpenSesame variables into plain Python ones
	stimulus = exp.get('stimulus')
	congruity = exp.get('congruity')
	targetSide = exp.get('targetSide')
	
	
	# Some dimensions
	# Our start button is 80x80 pixels.
	# Change these values if using a different sized image.
	start_w=192
	start_h=80
	
	half_start_w = 40
	half_start_h = 40
	# Likewise for the response buttons
	response_w = 192
	response_h = 128
	# Get the size of the screen
	mx = my_canvas.xcenter()
	my = my_canvas.ycenter()
	
	# Some empty lists for recording mouse data
	xList, yList, tList = [], [], []
	__end__

define inline_script mousetracking_script_block1_1_1
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
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	__end__

define inline_script mousetracking_script_block1_1_1_1
	set description "Executes Python code"
	___run__
	# Draw start Button and response buttons
	
	def response_buttons():
		my_canvas.rect(x=0,y=0,w=response_w,h=response_h,fill=True)  # left response button
		my_canvas.rect(x=2*mx-response_w,y=0,w=response_w,h=response_h,fill=True)  # right response button
		my_canvas.text("Left",x=0.5*response_w,y=0.5*response_h,color='white')
		my_canvas.text("Right",x=2*mx-0.5*response_w,y=0.5*response_h,color='white')
	
	def start_button():
		my_canvas.rect(x=mx-0.5*start_w,y=2*my-start_h,w=start_w,h=start_h,fill=True)  # start button
		my_canvas.text("Start",x=mx,y=2*my-0.5*start_h,color='white')
	
	my_canvas.clear()
	response_buttons()
	start_button()
	my_canvas.show()
	
	my_mouse.show_cursor(show=True)
	
	#Wait for click on start button
	while 1:
		button, position, timestamp = my_mouse.get_click()
		x, y = position
		if x > mx-0.5*start_w and x < mx+0.5*start_w and y > (2*my) - start_h:
			my_canvas.clear()
			break
	
	# Hide the mouse
	my_mouse.show_cursor(show=False)
	# Fixation
	tick = fixation_length / 3
	my_canvas.clear()
	response_buttons()
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.text('+')
	response_buttons()
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.clear()
	response_buttons()
	my_canvas.show()
	exp.sleep(tick)
	
	
	
	# Show the stimuli
	
	my_canvas.clear()
	my_canvas.image(exp.get_file('stimuli/{0}'.format(stimulus)),True)
	response_buttons()
	my_canvas.show()
	# Show the mouse, and move it to the starting point
	my_mouse.show_cursor(show=True)
	my_mouse.set_pos(pos=(mx, (2*my)-half_start_h))
	
	
	
	
	# The actual mouse tracking
	t0 = start = exp.time()
	t1 = t0 + sample_rate
	resp = 0
	timed_out = False
	slow_start = False
	while 1:
		position, timestamp = my_mouse.get_pos()
		if my_mouse.get_pressed()[0]: # A click
			if x < response_w and y < response_h:
				# Clicked response 1
				rt = timestamp - start
				resp = 1
				print 'response 1'
				break
			elif x > (2*mx) - response_w and y < response_h:
				# Clicked response 2
				rt = timestamp - start
				resp = 2
				print 'response 2'
				break
		if timestamp > t1:
			# It's time to record the mouse position
			t1 += sample_rate
			t = timestamp - start
			x, y = position
			xList.append(x)
			yList.append(y)
			tList.append(t)
			if t > max_response_time:
				# Out of time, record a null response.
				timed_out = True
				resp = -1
				rt = None
				print 'Timeout'
				break
	
	# Let's figure out if the response was correct
	if targetSide == 'left':
		correct_response = 1
	else:
		correct_response = 2
	accuracy = int(resp == correct_response)
	
	
	# Show a message if wrong answer (optional)
	if (accuracy == 0 and not timed_out):
		my_canvas.clear()
		response_buttons()
		my_canvas.text('X',color="red")
		my_canvas.show()
		exp.sleep(1000)
	
	# show a message if RT > 1000 msec
	
	if (rt>1000):
		my_canvas.clear()
		response_buttons()
		my_canvas.text('Please make your response more quickly!',color="red")
		my_canvas.show()
		exp.sleep(1000)
	
	# Show a message if the trial has timed out without a response
	if timed_out:
		my_canvas.clear()
		response_buttons()
		my_canvas.text(timeout_message)
		my_canvas.show()
		timed_out = False
		my_keyboard.get_key()
	
	# Figure out if the mouse had left the start button by max_init_time
	for i in range(len(yList)):
		y = yList[i]
		if y < ((2*my) - (2*half_start_h)):
			init_step = i # The sample where y left the button
			break
	init_time = tList[init_step] # 	The time of that sample
	slow_start = int(init_time > max_init_time)
	
	
	
	# Show a message if the trial has timed out without a response
	if (slow_start and not timed_out):
		my_canvas.clear()
		my_canvas.text(slow_start_message)
		my_canvas.rect(x=0,y=0,w=response_w,h=response_h,fill=True)  # left response button
		my_canvas.rect(x=2*mx-response_w,y=0,w=response_w,h=response_h,fill=True)  # right response button
		my_canvas.text("True",x=0.5*response_w,y=0.5*response_h,color='white')
		my_canvas.text("False",x=2*mx-0.5*response_w,y=0.5*response_h,color='white')
		my_canvas.show()
		timed_out = False
		my_keyboard.get_key()
	
	
	# Standard Logging (the probe and code variables are taken care of automatically)
	self.experiment.set("response", resp)
	self.experiment.set("accuracy", accuracy)
	self.experiment.set("rt", rt)
	self.experiment.set("xTrajectory", str(xList))
	self.experiment.set("yTrajectory", str(yList))
	self.experiment.set("tTrajectory", str(tList))
	#self.experiment.set("trialNumber", count_block1_sequence)
	__end__
	___prepare__
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	__end__

define inline_script mousetracking_script_block1_2
	set description "Executes Python code"
	___run__
	# Draw start Button and response buttons
	
	def response_buttons():
		my_canvas.rect(x=0,y=0,w=response_w,h=response_h,fill=True)  # left response button
		my_canvas.rect(x=2*mx-response_w,y=0,w=response_w,h=response_h,fill=True)  # right response button
		my_canvas.text("Left",x=0.5*response_w,y=0.5*response_h,color='white')
		my_canvas.text("Right",x=2*mx-0.5*response_w,y=0.5*response_h,color='white')
	
	def start_button():
		my_canvas.rect(x=mx-0.5*start_w,y=2*my-start_h,w=start_w,h=start_h,fill=True)  # start button
		my_canvas.text("Start",x=mx,y=2*my-0.5*start_h,color='white')
	
	my_canvas.clear()
	response_buttons()
	start_button()
	my_canvas.show()
	
	my_mouse.show_cursor(show=True)
	
	#Wait for click on start button
	while 1:
		button, position, timestamp = my_mouse.get_click()
		x, y = position
		if x > mx-0.5*start_w and x < mx+0.5*start_w and y > (2*my) - start_h:
			my_canvas.clear()
			break
	
	# Hide the mouse
	my_mouse.show_cursor(show=False)
	# Fixation
	tick = fixation_length / 3
	my_canvas.clear()
	response_buttons()
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.text('+')
	response_buttons()
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.clear()
	response_buttons()
	my_canvas.show()
	exp.sleep(tick)
	
	
	
	# Show the stimuli
	
	my_canvas.clear()
	my_canvas.image(exp.get_file('stimuli/{0}'.format(stimulus)),True)
	response_buttons()
	my_canvas.show()
	# Show the mouse, and move it to the starting point
	my_mouse.show_cursor(show=True)
	my_mouse.set_pos(pos=(mx, (2*my)-half_start_h))
	
	
	
	
	# The actual mouse tracking
	t0 = start = exp.time()
	t1 = t0 + sample_rate
	resp = 0
	timed_out = False
	slow_start = False
	while 1:
		position, timestamp = my_mouse.get_pos()
		if my_mouse.get_pressed()[0]: # A click
			if x < response_w and y < response_h:
				# Clicked response 1
				rt = timestamp - start
				resp = 1
				print 'response 1'
				break
			elif x > (2*mx) - response_w and y < response_h:
				# Clicked response 2
				rt = timestamp - start
				resp = 2
				print 'response 2'
				break
		if timestamp > t1:
			# It's time to record the mouse position
			t1 += sample_rate
			t = timestamp - start
			x, y = position
			xList.append(x)
			yList.append(y)
			tList.append(t)
			if t > max_response_time:
				# Out of time, record a null response.
				timed_out = True
				resp = -1
				rt = None
				print 'Timeout'
				break
	
	# Let's figure out if the response was correct
	if targetSide == 'left':
		correct_response = 1
	else:
		correct_response = 2
	accuracy = int(resp == correct_response)
	
	# show a message if RT > 1000 msec
	
	if (rt>1000):
		my_canvas.clear()
		response_buttons()
		my_canvas.text('Please make your response more quickly!',color="red")
		my_canvas.show()
		exp.sleep(1000)
	
	# Show a message if wrong answer (optional)
	if (accuracy == 0 and not timed_out):
		my_canvas.clear()
		response_buttons()
		my_canvas.text('X',color="red")
		my_canvas.show()
		exp.sleep(1000)
	
	# Show a message if the trial has timed out without a response
	if timed_out:
		my_canvas.clear()
		response_buttons()
		my_canvas.text(timeout_message)
		my_canvas.show()
		timed_out = False
		my_keyboard.get_key()
	
	# Figure out if the mouse had left the start button by max_init_time
	for i in range(len(yList)):
		y = yList[i]
		if y < ((2*my) - (2*half_start_h)):
			init_step = i # The sample where y left the button
			break
	init_time = tList[init_step] # 	The time of that sample
	slow_start = int(init_time > max_init_time)
	
	
	
	# Show a message if the trial has timed out without a response
	if (slow_start and not timed_out):
		my_canvas.clear()
		my_canvas.text(slow_start_message)
		my_canvas.rect(x=0,y=0,w=response_w,h=response_h,fill=True)  # left response button
		my_canvas.rect(x=2*mx-response_w,y=0,w=response_w,h=response_h,fill=True)  # right response button
		my_canvas.text("True",x=0.5*response_w,y=0.5*response_h,color='white')
		my_canvas.text("False",x=2*mx-0.5*response_w,y=0.5*response_h,color='white')
		my_canvas.show()
		timed_out = False
		my_keyboard.get_key()
	
	
	# Standard Logging (the probe and code variables are taken care of automatically)
	self.experiment.set("response", resp)
	self.experiment.set("accuracy", accuracy)
	self.experiment.set("rt", rt)
	self.experiment.set("xTrajectory", str(xList))
	self.experiment.set("yTrajectory", str(yList))
	self.experiment.set("tTrajectory", str(tList))
	#self.experiment.set("trialNumber", count_block1_sequence)
	__end__
	___prepare__
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	__end__

define loop practiceBlock
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item exp_sequence_2
	set description "Repeatedly runs another item"
	set cycles 16
	set column_order "stimulus;congruity;targetSide"
	set break_if never
	setcycle 0 stimulus "leftCongruent.jpg"
	setcycle 0 congruity "congruent"
	setcycle 0 targetSide "left"
	setcycle 1 stimulus "rightIncongruent.jpg"
	setcycle 1 congruity "incongruent"
	setcycle 1 targetSide "right"
	setcycle 2 stimulus "rightCongruent.jpg"
	setcycle 2 congruity "congruent"
	setcycle 2 targetSide "right"
	setcycle 3 stimulus "leftIncongruent.jpg"
	setcycle 3 congruity "incongruent"
	setcycle 3 targetSide "left"
	setcycle 4 stimulus "leftCongruent.jpg"
	setcycle 4 congruity "congruent"
	setcycle 4 targetSide "left"
	setcycle 5 stimulus "rightIncongruent.jpg"
	setcycle 5 congruity "incongruent"
	setcycle 5 targetSide "right"
	setcycle 6 stimulus "rightCongruent.jpg"
	setcycle 6 congruity "congruent"
	setcycle 6 targetSide "right"
	setcycle 7 stimulus "leftIncongruent.jpg"
	setcycle 7 congruity "incongruent"
	setcycle 7 targetSide "left"
	setcycle 8 stimulus "leftCongruent.jpg"
	setcycle 8 congruity "congruent"
	setcycle 8 targetSide "left"
	setcycle 9 stimulus "rightIncongruent.jpg"
	setcycle 9 congruity "incongruent"
	setcycle 9 targetSide "right"
	setcycle 10 stimulus "rightCongruent.jpg"
	setcycle 10 congruity "congruent"
	setcycle 10 targetSide "right"
	setcycle 11 stimulus "leftIncongruent.jpg"
	setcycle 11 congruity "incongruent"
	setcycle 11 targetSide "left"
	setcycle 12 stimulus "leftCongruent.jpg"
	setcycle 12 congruity "congruent"
	setcycle 12 targetSide "left"
	setcycle 13 stimulus "rightIncongruent.jpg"
	setcycle 13 congruity "incongruent"
	setcycle 13 targetSide "right"
	setcycle 14 stimulus "rightCongruent.jpg"
	setcycle 14 congruity "congruent"
	setcycle 14 targetSide "right"
	setcycle 15 stimulus "leftIncongruent.jpg"
	setcycle 15 congruity "incongruent"
	setcycle 15 targetSide "left"
	run exp_sequence_2

define inline_script setup_script
	set description "Executes Python code"
	___run__
	# Create our input and output routines
	from openexp.mouse import mouse
	from openexp.keyboard import keyboard
	from openexp.canvas import canvas
	my_mouse = mouse(exp, visible=True)
	my_keyboard = keyboard(exp)
	my_canvas = canvas(exp)
	# Declare them as global, so we can use them later on.
	global my_mouse, my_keyboard, my_canvas
	__end__
	set _prepare ""

